PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AB
  keyboardBackend = ioHub
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Routines
  Routine ins
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    TextComponent text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        指导语

        如果看到奇数，请按键盘上的F键。
        如果看到偶数，请按键盘上的J键。
        请您集中注意力，反应要尽可能准确且迅速。准备好后，我们将开始测试。

        祝您好运！

        Instructions

        If you see an odd number, please press the F key on your keyboard.
        If you see an even number, please press the J key on your keyboard.
        Please focus your attention and try to respond as accurately and swiftly as possible. Once you are ready, we will begin the test.
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import csv
        import random

        def read_and_shuffle_csv(input_file, output_file):
            # 确保以正确的编码格式读取CSV文件Ensure the CSV file is read with the correct encoding format.
            with open(input_file, mode='r', encoding='utf-8') as file:
                reader = csv.reader(file)
                next(reader)  # 跳过第一行 Skip the first line.
                # 将所有行的内容合并为一个字符串，同时去除逗号 Convert the text into a list of characters, and shuffle the order randomly.
                text = ''.join([''.join(row[:2]).replace(',', '') for row in reader])

            # 将文本转换为字符列表，并随机打乱顺序 Convert the text into a list of characters, and shuffle the order randomly.
            characters = list(text)
            random.shuffle(characters)

            # 将字符分组，每组七个 Group the characters, seven per group.
            groups = [characters[i:i + 2] for i in range(0, len(characters), 2)]

            # 确保在写入文件时也使用UTF-8编码Ensure that UTF-8 encoding is also used when writing to the file.
            with open(output_file, mode='w', newline='', encoding='utf-8') as file:
                writer = csv.writer(file)
                writer.writerow(['dislist'])  # 写入表头 Write the header.
                for group in groups:
                    writer.writerow([''.join(group)])  # 写入每一组Write each group.

            return output_file

        # 注意替换这里的路径为实际路径Note to replace the paths here with actual paths.
        input_csv = 'wordlist.csv'  # 替换为源CSV文件的路径Replace with the path to the source CSV file.
        output_csv = 'distractorlist.csv'  # 替换为输出CSV文件的路径 Replace with the path to the output CSV file.

        # 调用函数进行处理Call the function for processing.
        shuffled_csv = read_and_shuffle_csv(input_csv, output_csv)
        print(f"Shuffled CSV saved to: {shuffled_csv}")
        def shuffle_columns(rows, column_indices):
            # Extract the specific columns to shuffle
            columns_to_shuffle = [[row[index] for row in rows] for index in column_indices]

            # Shuffle the extracted columns independently
            for column in columns_to_shuffle:
                random.shuffle(column)

            # Reinsert the shuffled columns back into the rows
            for i, row in enumerate(rows):
                for col_index, column in zip(column_indices, columns_to_shuffle):
                    row[col_index] = column[i]

        def read_and_shuffle_csv(input_file, output_file):
            with open(input_file, mode='r', encoding='utf-8') as file:
                reader = csv.reader(file)
                headers = next(reader)  # Read the header row
                rows = list(reader)     # Read the rest of the rows

            # Shuffle the fourth and fifth columns (indices 3 and 4)
            shuffle_columns(rows, [3, 4])

            # Shuffle the last three columns (indices 5, 6, and 7)
            shuffle_columns(rows, [5, 6, 7])

            # Write the shuffled rows back to a new CSV file
            with open(output_file, mode='w', newline='', encoding='utf-8') as file:
                writer = csv.writer(file)
                writer.writerow(headers)  # Write the header row
                writer.writerows(rows)    # Write the shuffled rows

            return output_file

        # 注意替换这里的路径为实际路径
        input_csv = 'wordlist.csv'  # 替换为源CSV文件的路径
        output_csv = 'wordlist1.csv'  # 替换为输出CSV文件的路径

        # 调用函数进行处理
        shuffled_csv = read_and_shuffle_csv(input_csv, output_csv)
        print(f"Shuffled CSV saved to: {shuffled_csv}")
  Routine cue
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    TextComponent cuesti
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $probe
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    TextComponent cueblank
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine dis1
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    TextComponent text_3
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $dislist
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  Routine probe
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    TextComponent text_4
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.083
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $sectag
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    TextComponent text_FLK1
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.083
      text = ××
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    TextComponent text_FLK2
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.166
      stopVal [duration (s)] = 0.083
      text = ××
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  Routine firsTar
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    TextComponent text_5
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $bignum
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  Routine AskRelated
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_11
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Related-F    Unrelated-J
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      correctAns = $relatedu
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine AskColor
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_7
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Odd-F    Even-J
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $oddeven
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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Flow
  Routine ins
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = wordlist1.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('probe', '手部'), ('sectag', '脚部'), ('firstnum', '0:06'), ('dis1num', 0.0), ('dis2num', '0:12')]),
      OrderedDict([('probe', '商店'), ('sectag', '店铺'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:03')]),
      OrderedDict([('probe', '窗帘'), ('sectag', '帘幔'), ('firstnum', '0:09'), ('dis1num', 0.0), ('dis2num', '0:09')]),
      OrderedDict([('probe', '猫咪'), ('sectag', '小猫'), ('firstnum', '0:06'), ('dis1num', 0.0), ('dis2num', '0:12')]),
      OrderedDict([('probe', '思考'), ('sectag', '沉思'), ('firstnum', '0:09'), ('dis1num', '0:02'), ('dis2num', '0:07')]),
      OrderedDict([('probe', '背包'), ('sectag', '手袋'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:03')]),
      OrderedDict([('probe', '稻草'), ('sectag', '草草'), ('firstnum', '0:06'), ('dis1num', 0.0), ('dis2num', '0:12')]),
      OrderedDict([('probe', '杂草'), ('sectag', '草根'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:03')]),
      OrderedDict([('probe', '承诺'), ('sectag', '诺言'), ('firstnum', '0:06'), ('dis1num', '0:06'), ('dis2num', '0:06')]),
      OrderedDict([('probe', '利润'), ('sectag', '亏损'), ('firstnum', '0:06'), ('dis1num', 0.0), ('dis2num', '0:12')]),
      OrderedDict([('probe', '脏污'), ('sectag', '洁净'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:03')]),
      OrderedDict([('probe', '葡萄'), ('sectag', '提子'), ('firstnum', '0:06'), ('dis1num', '0:02'), ('dis2num', '0:10')]),
      OrderedDict([('probe', '通行'), ('sectag', '过路'), ('firstnum', '0:09'), ('dis1num', 0.0), ('dis2num', '0:09')])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
    Routine cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $firstnum
      conditionsFile = distractorlist.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('dislist', '池青母平出盐烤')]),
        OrderedDict([('dislist', '草女出偷油派刺')]),
        OrderedDict([('dislist', '诺报船庄儿潮杀')]),
        OrderedDict([('dislist', '更牧子用薄星虫')]),
        OrderedDict([('dislist', '希些时饼妈愿启')]),
        OrderedDict([('dislist', '连硬智黑毯点混')]),
        OrderedDict([('dislist', '方妈里云萄警狱')]),
        OrderedDict([('dislist', '管四觉葡肥部达')]),
        OrderedDict([('dislist', '书关烘勺修儿脱')]),
        OrderedDict([('dislist', '聆子沉头锅马好')]),
        OrderedDict([('dislist', '小憎害拉她善祈')]),
        OrderedDict([('dislist', '筐动药屋月石母')]),
        OrderedDict([('dislist', '地猴片球围铁店')]),
        OrderedDict([('dislist', '钥年水头珠男最')]),
        OrderedDict([('dislist', '月手金件场虚害')]),
        OrderedDict([('dislist', '考陈饭地息福猪')]),
        OrderedDict([('dislist', '士投活大戮诸跑')]),
        OrderedDict([('dislist', '支星掷标雪数小')]),
        OrderedDict([('dislist', '般约鲜发助料爱')]),
        OrderedDict([('dislist', '单尾碟慢子亡类')]),
        OrderedDict([('dislist', '窃茶发祷找心地')]),
        OrderedDict([('dislist', '路迈游作旋授邮')]),
        OrderedDict([('dislist', '粉来玩调醒心板')]),
        OrderedDict([('dislist', '花服亲卉旧修警')]),
        OrderedDict([('dislist', '走座找腊雹损下')]),
        OrderedDict([('dislist', '果行礼钟子个酒')]),
        OrderedDict([('dislist', '生修很酒客动桃')]),
        OrderedDict([('dislist', '毛清唇裁鹰雾坐')]),
        OrderedDict([('dislist', '接婴痛凉冰园和')]),
        OrderedDict([('dislist', '幸黄半酪道岩开')]),
        OrderedDict([('dislist', '压机吞衣奶搬队')]),
        OrderedDict([('dislist', '人话更暗对锤浮')]),
        OrderedDict([('dislist', '草子游巴觉角饥')]),
        OrderedDict([('dislist', '飞地肺害简油觉')]),
        OrderedDict([('dislist', '缩伤甲有员带快')]),
        OrderedDict([('dislist', '裙思君费子街予')]),
        OrderedDict([('dislist', '片楼糕鸡大一子')]),
        OrderedDict([('dislist', '欺上车士话离国')]),
        OrderedDict([('dislist', '放进个丢车渴嘴')]),
        OrderedDict([('dislist', '怒焰着针取侏靠')])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
      Routine dis1
    LoopTerminator trials
    Routine firsTar
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractorlist.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('dislist', '的草记胖尺恨水')]),
        OrderedDict([('dislist', '虎大糕粉密刀活')]),
        OrderedDict([('dislist', '小半咳冰口听子')]),
        OrderedDict([('dislist', '团孩线笔界孩安')]),
        OrderedDict([('dislist', '衣肺通猴敌地大')]),
        OrderedDict([('dislist', '演地司通刺方默')]),
        OrderedDict([('dislist', '很托橡石力斧戏')]),
        OrderedDict([('dislist', '级窗板剪刀铁写')]),
        OrderedDict([('dislist', '酪游绸小十始弱')]),
        OrderedDict([('dislist', '石想椅慢锅的做')]),
        OrderedDict([('dislist', '分大燃园奔饿的')]),
        OrderedDict([('dislist', '四队花方熟夫石')]),
        OrderedDict([('dislist', '拥公到条鸟唱肉')]),
        OrderedDict([('dislist', '单袋发滚朗容露')]),
        OrderedDict([('dislist', '地硬的肉较稻子')]),
        OrderedDict([('dislist', '子誓战池刀助子')]),
        OrderedDict([('dislist', '蝴堂校玩果小学')]),
        OrderedDict([('dislist', '白痒是醉毒放平')]),
        OrderedDict([('dislist', '闭龄少损猪钢法')]),
        OrderedDict([('dislist', '员切皮曲明缄时')]),
        OrderedDict([('dislist', '咖龟嘴字甲汽约')]),
        OrderedDict([('dislist', '的包帝学奶的年')]),
        OrderedDict([('dislist', '发的胶子现察海')]),
        OrderedDict([('dislist', '里作干成张慢球')]),
        OrderedDict([('dislist', '的死道投分内字')]),
        OrderedDict([('dislist', '手织过子尖连动')]),
        OrderedDict([('dislist', '床派金装他教霾')]),
        OrderedDict([('dislist', '儿宝她大个爸扫')]),
        OrderedDict([('dislist', '坐找子亲火晴钟')]),
        OrderedDict([('dislist', '人行沙手黄板飞')]),
        OrderedDict([('dislist', '发毁牛色公五指')]),
        OrderedDict([('dislist', '长子行腊的尘尾')]),
        OrderedDict([('dislist', '果测丁屉运向站')]),
        OrderedDict([('dislist', '毛看下纳会饥报')]),
        OrderedDict([('dislist', '行松癫站冷茶田')]),
        OrderedDict([('dislist', '火臭跟工度臭月')]),
        OrderedDict([('dislist', '鸡脚的宅祷李的')]),
        OrderedDict([('dislist', '锁与蜂心的狗吃')]),
        OrderedDict([('dislist', '物鲜雾信下得打')]),
        OrderedDict([('dislist', '祈小方清泳仔教')])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
      Routine dis1
    LoopTerminator trials_2
    Routine probe
    LoopInitiator trials_3 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractorlist.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('dislist', '玩节秤毯潮气卧')]),
        OrderedDict([('dislist', '北报量猎久剪愤')]),
        OrderedDict([('dislist', '放栏方赌火简子')]),
        OrderedDict([('dislist', '你道思黏湿动云')]),
        OrderedDict([('dislist', '跑般盖脚战吞合')]),
        OrderedDict([('dislist', '休蜘家膝重子机')]),
        OrderedDict([('dislist', '糊顶类润钢图唱')]),
        OrderedDict([('dislist', '草肌肘焰良然国')]),
        OrderedDict([('dislist', '蛋出寂猪车街开')]),
        OrderedDict([('dislist', '手闭时给丝狐侏')]),
        OrderedDict([('dislist', '根员借熏路梯菜')]),
        OrderedDict([('dislist', '花的粗好头雾痘')]),
        OrderedDict([('dislist', '石车聆卖泥跳真')]),
        OrderedDict([('dislist', '狸子盘儿子窃方')]),
        OrderedDict([('dislist', '会接察铲水牛萄')]),
        OrderedDict([('dislist', '方人形伤发道岩')]),
        OrderedDict([('dislist', '老园开憎福嚏类')]),
        OrderedDict([('dislist', '海迫不窗聪鼠始')]),
        OrderedDict([('dislist', '锤拳部矮农花找')]),
        OrderedDict([('dislist', '注果拿子亮跑皮')]),
        OrderedDict([('dislist', '粉片病败留盘苹')]),
        OrderedDict([('dislist', '咒旧铺女跃姑票')]),
        OrderedDict([('dislist', '长颜公赛大马板')]),
        OrderedDict([('dislist', '浆鸟子走份地地')]),
        OrderedDict([('dislist', '市稻前书子泥管')]),
        OrderedDict([('dislist', '刮心些永学戏动')]),
        OrderedDict([('dislist', '清肉欢成唇指底')]),
        OrderedDict([('dislist', '饪不计锋臂明人')]),
        OrderedDict([('dislist', '损月过行风伤租')]),
        OrderedDict([('dislist', '利方理总损良年')]),
        OrderedDict([('dislist', '众房焙钟裁寒方')]),
        OrderedDict([('dislist', '咀马脏男味类穷')]),
        OrderedDict([('dislist', '磅结狱小缩的队')]),
        OrderedDict([('dislist', '大青桑童树绵文')]),
        OrderedDict([('dislist', '下列印尖曲狗油')]),
        OrderedDict([('dislist', '重盏考称蛇归标')]),
        OrderedDict([('dislist', '物尺温拳邮到起')]),
        OrderedDict([('dislist', '河黄游看腊争优')]),
        OrderedDict([('dislist', '肌烟害位跃幔雄')]),
        OrderedDict([('dislist', '盲梳哭料球汽痒')])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
      Routine dis1
    LoopTerminator trials_3
    Routine AskColor
    Routine AskRelated
  LoopTerminator trials_4
