PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  expName = AB
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent text_insctructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # 从 txt 文件中读取文本
        with open('instruction.txt', 'r') as file:
            text = file.read()

        # 将读取的文本赋值给 text_stim 组件的 text 属性
        text_insctructions.text = text
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractors
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    TextComponent text_disctractors
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $dist
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  Routine T1_number
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    TextComponent text_T1
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $T1
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  Routine T2_probe
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    TextComponent text_T2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.083
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $T2
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  Routine Ask_T1
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    TextComponent blankT1_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T1ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Odd-F    Even-J
    TextComponent blankT1_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T1
      allowedKeys = 'f','j'
      correctAns = $responseT1
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Ask_T2
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    TextComponent blankT2_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T2ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Related-F    Unrelated-J
    TextComponent blankT2_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T2
      allowedKeys = 'f','j'
      correctAns = $responseT2
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine T0_context
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    TextComponent context_word
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T0
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    TextComponent blankContext
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = LuckList.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('T0', 'XHANDSX'), ('T2', 'XXFEETX'), ('T1', 7777777), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'XSTOREX'), ('T2', 'XXSHOPX'), ('T1', 1111111), ('lagT1', 9), ('lagT2', 3), ('lagEnd', 8), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'CURTAIN'), ('T2', 'XDRAPEX'), ('T1', 8888888), ('lagT1', 9), ('lagT2', 7), ('lagEnd', 4), ('responseT1', 'f'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'XXCATXX'), ('T2', 'XKITTEN'), ('T1', 9999999), ('lagT1', 10), ('lagT2', 1), ('lagEnd', 9), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'XPONDER'), ('T2', 'XTHINKX'), ('T1', 5555555), ('lagT1', 9), ('lagT2', 7), ('lagEnd', 4), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'XXBAGXX'), ('T2', 'XXSACKX'), ('T1', 3333333), ('lagT1', 9), ('lagT2', 3), ('lagEnd', 8), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'XSTRAWX'), ('T2', 'XXHAYXX'), ('T1', 4444444), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'f'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'XWEEDSX'), ('T2', 'XROOTSX'), ('T1', 7777777), ('lagT1', 8), ('lagT2', 3), ('lagEnd', 9), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', 'PROMISE'), ('T2', 'XPLEDGE'), ('T1', 2222222), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'f'), ('responseT2', 'f')])]
    Routine T0_context
    LoopInitiator trials_context loopType="TrialHandler"
      Selected rows = $"0:{}".format(lagT1+1)
      conditionsFile = distractors.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('dist', 'KMJCWBH')]),
        OrderedDict([('dist', 'PSKDHLC')]),
        OrderedDict([('dist', 'BFSHVMY')]),
        OrderedDict([('dist', 'GBDHMJF')]),
        OrderedDict([('dist', 'CVSKHYF')]),
        OrderedDict([('dist', 'SGWZLKR')]),
        OrderedDict([('dist', 'FTVJCQG')]),
        OrderedDict([('dist', 'FBVMGYZ')]),
        OrderedDict([('dist', 'TBCNLFY')]),
        OrderedDict([('dist', 'TXWSBDY')]),
        OrderedDict([('dist', 'ZTWLDMH')]),
        OrderedDict([('dist', 'PNHZFRK')]),
        OrderedDict([('dist', 'VYXBTSN')]),
        OrderedDict([('dist', 'RMTKWFQ')]),
        OrderedDict([('dist', 'TMZYXVJ')]),
        OrderedDict([('dist', 'HRQYSGD')]),
        OrderedDict([('dist', 'DYGPMWR')]),
        OrderedDict([('dist', 'TPMRWBX')]),
        OrderedDict([('dist', 'MSGNZDX')])]
      Routine distractors
    LoopTerminator trials_context
    Routine T1_number
    LoopInitiator trials_T1 loopType="TrialHandler"
      Selected rows = $"0:{}".format(lagT2+1)
      conditionsFile = distractors.csv
      loopType = random
      nReps = lagT2
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      conditions:
        [OrderedDict([('dist', 'KMJCWBH')]),
        OrderedDict([('dist', 'PSKDHLC')]),
        OrderedDict([('dist', 'BFSHVMY')]),
        OrderedDict([('dist', 'GBDHMJF')]),
        OrderedDict([('dist', 'CVSKHYF')]),
        OrderedDict([('dist', 'SGWZLKR')]),
        OrderedDict([('dist', 'FTVJCQG')]),
        OrderedDict([('dist', 'FBVMGYZ')]),
        OrderedDict([('dist', 'TBCNLFY')]),
        OrderedDict([('dist', 'TXWSBDY')]),
        OrderedDict([('dist', 'ZTWLDMH')]),
        OrderedDict([('dist', 'PNHZFRK')]),
        OrderedDict([('dist', 'VYXBTSN')]),
        OrderedDict([('dist', 'RMTKWFQ')]),
        OrderedDict([('dist', 'TMZYXVJ')]),
        OrderedDict([('dist', 'HRQYSGD')]),
        OrderedDict([('dist', 'DYGPMWR')]),
        OrderedDict([('dist', 'TPMRWBX')]),
        OrderedDict([('dist', 'MSGNZDX')])]
      Routine distractors
    LoopTerminator trials_T1
    Routine T2_probe
    LoopInitiator trials_T2 loopType="TrialHandler"
      Selected rows = $"0:{}".format(lagEnd+1)
      conditionsFile = distractors.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine distractors
    LoopTerminator trials_T2
    Routine Ask_T1
    Routine Ask_T2
  LoopTerminator block
